CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['The Images module is used when testing pipeline in GUI.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['We do not extract metadata during illumination correction.']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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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notes:['Assign channel names for each file based on CH section of file names.', '', 'DAPI = CH0', 'A647 = CH1', 'GOLD = CH2', '']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CH0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH1")
    Name to assign these images:A647
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "CH2")
    Name to assign these images:GOLD
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:["We don't use the Groups module during illumination correction."]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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:["Since this dataset has very small nuclei that don't take up much of the images, we will use background with a block size of 120, which seems to work best at this time."]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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Background
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    Block size:120
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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notes:["Since this dataset has very small nuclei that don't take up much of the images, we will use background with a block size of 120, which seems to work best at this time."]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
    Select the input image:A647
    Name the output image:IllumA647
    Select how the illumination function is calculated:Background
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    Block size:120
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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notes:["Since this dataset has very small nuclei that don't take up much of the images, we will use background with a block size of 120, which seems to work best at this time."]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
    Select the input image:GOLD
    Name the output image:IllumGOLD
    Select how the illumination function is calculated:Background
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    Block size:120
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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notes:['Apply the IC functions to each of the channels.']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
    Select the input image:DAPI
    Name the output image:CorrDAPI
    Select the illumination function:IllumDAPI
    Select how the illumination function is applied:Subtract
    Select the input image:A647
    Name the output image:CorrA647
    Select the illumination function:IllumA647
    Select how the illumination function is applied:Subtract
    Select the input image:GOLD
    Name the output image:CorrGOLD
    Select the illumination function:IllumGOLD
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

SaveImages:[module_num:9|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notes:['Save the corrected images with a suffix.']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
    Select the type of image to save:Image
    Select the image to save:CorrDAPI
    Select method for constructing file names:From image filename
    Select image name for file prefix:DAPI
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:10|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notes:['Save the corrected images with a suffix.']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
    Select the type of image to save:Image
    Select the image to save:CorrA647
    Select method for constructing file names:From image filename
    Select image name for file prefix:A647
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:11|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notes:['Save the corrected images with a suffix.']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
    Select the type of image to save:Image
    Select the image to save:CorrGOLD
    Select method for constructing file names:From image filename
    Select image name for file prefix:GOLD
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illumcorrect
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
